CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:39
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Please put your images here that you are going to be using']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['This is where you define which files are associated with which channels. Of special note, the stardist channel will have both the channel it was generated from and the word "stardist" in it.', 'So, we use both the rules "File Does contain star" for the stardist image, and "File Does not contain star" for the images that are from the channel stardist was generated from (but without the stardist labels).', '', 'i.e. if Channel 1 is dapi, "File Does Contain C1" "File Does not Contain star"  would give us back just the DAPI channel but not the stardist label']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:10
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "star")
    Name to assign these images:Prob_map
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C1") (file doesnot contain "DAPI") (file doesnot contain "star") (file doesnot contain "Enhanced")
    Name to assign these images:C1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C2") (file doesnot contain "enhanced")
    Name to assign these images:C2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C3") (file doesnot contain "Enhanced")
    Name to assign these images:C3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C4") (file doesnot contain "Enhanced")
    Name to assign these images:C4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C2") (file does contain "enhanced")
    Name to assign these images:C2_enhanced
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C3") (file does contain "Enhanced")
    Name to assign these images:C3_Enhanced
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C4") (file does contain "Enhanced")
    Name to assign these images:C4_Enhanced
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C1") (file doesnot contain "DAPI") (file doesnot contain "star") (file does contain "Enhanced")
    Name to assign these images:C1_Enhanced
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C5")
    Name to assign these images:C5
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:C1
    Name the output image:C1_BGfun
    Select how the illumination function is calculated:Background
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    Block size:75
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:C2
    Name the output image:C2_bg_fun
    Select how the illumination function is calculated:Background
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    Block size:75
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:C3
    Name the output image:C3_bg_fun
    Select how the illumination function is calculated:Background
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    Block size:75
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:C4
    Name the output image:C4_bg_fun
    Select how the illumination function is calculated:Background
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    Block size:75
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:9|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
    Select the input image:C2_enhanced
    Name the output image:C2_enhanced_bg_fun
    Select how the illumination function is calculated:Background
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    Block size:75
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:10|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
    Select the input image:C1_Enhanced
    Name the output image:C1_Enhanced_BG_Fun
    Select how the illumination function is calculated:Background
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    Block size:75
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:11|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
    Select the input image:C3_Enhanced
    Name the output image:C3_enhanced_bg_fun
    Select how the illumination function is calculated:Background
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    Block size:75
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:12|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
    Select the input image:C4_Enhanced
    Name the output image:C4_Enhanced_bg_fun
    Select how the illumination function is calculated:Background
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    Block size:75
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:13|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
    Select the input image:C1
    Name the output image:C1_Corr
    Select the illumination function:C1_BGfun
    Select how the illumination function is applied:Subtract
    Select the input image:C2
    Name the output image:C2_Corr
    Select the illumination function:C2_bg_fun
    Select how the illumination function is applied:Subtract
    Select the input image:C3
    Name the output image:C3_Corr
    Select the illumination function:C3_bg_fun
    Select how the illumination function is applied:Subtract
    Select the input image:C4
    Name the output image:C4_Corr
    Select the illumination function:C4_bg_fun
    Select how the illumination function is applied:Subtract
    Select the input image:C2_enhanced
    Name the output image:C2_Enhanced_Corr
    Select the illumination function:C2_enhanced_bg_fun
    Select how the illumination function is applied:Subtract
    Select the input image:C3_Enhanced
    Name the output image:C3_Enhanced_Corr
    Select the illumination function:C3_enhanced_bg_fun
    Select how the illumination function is applied:Subtract
    Select the input image:C4_Enhanced
    Name the output image:C4_Enhanced_Corr
    Select the illumination function:C4_Enhanced_bg_fun
    Select how the illumination function is applied:Subtract
    Select the input image:C1_Enhanced
    Name the output image:C1_Enhanced_Corr
    Select the illumination function:C1_Enhanced_BG_Fun
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

ConvertImageToObjects:[module_num:14|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
    Select the input image:Prob_map
    Name the output object:ConvertImageToObjects
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

FilterObjects:[module_num:15|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
    Select the objects to filter:ConvertImageToObjects
    Name the output objects:Objects_frame_edge_filtered
    Select the filtering mode:Image or mask border
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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
MeasureObjectSizeShape:[module_num:16|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
    Select object sets to measure:Objects_frame_edge_filtered
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:17|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notes:["Set min value to 750 pixels, max value is just an arbitrary large number to make sure that we don't lose anything too big.", 'The area value is in square pixels.  So that would be a 10x10 nucleus roughly. So pretty small is our limit.  Can be made smaller, but seems to work at this data 6/23/2020 -- TF']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
    Select the objects to filter:Objects_frame_edge_filtered
    Name the output objects:Objects_edge_size_filtered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:750
    Filter using a maximum measurement value?:Yes
    Maximum value:1000000
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
TrackObjects:[module_num:18|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notes:['Using Distance method, 2 pixels']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
    Choose a tracking method:Distance
    Select the objects to track:Objects_edge_size_filtered
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    Maximum pixel distance to consider matches:2
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCells
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    Filter objects by lifetime?:Yes
    Filter using a minimum lifetime?:Yes
    Minimum lifetime:1
    Filter using a maximum lifetime?:Yes
    Maximum lifetime:15
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
MeasureObjectIntensity:[module_num:19|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
    Select images to measure:C1, C1_Corr, C1_Enhanced, C1_Enhanced_Corr, C2, C2_Corr, C2_Enhanced_Corr, C2_enhanced, C3, C3_Corr, C3_Enhanced, C3_Enhanced_Corr, C4, C4_Corr, C4_Enhanced, C4_Enhanced_Corr, C5
    Select objects to measure:Objects_edge_size_filtered

MeasureObjectSizeShape:[module_num:20|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
    Select object sets to measure:Objects_edge_size_filtered
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

OverlayObjects:[module_num:21|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
    Input:C1_Corr
    Name the output image:Tracked_Objects_on_C1
    Objects:Objects_edge_size_filtered
    Opacity:0.3

OverlayObjects:[module_num:22|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
    Input:C2_Enhanced_Corr
    Name the output image:Tracked_objects_overlay_C2_Enhanced_Corr
    Objects:Objects_edge_size_filtered
    Opacity:0.3

OverlayObjects:[module_num:23|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
    Input:C2
    Name the output image:Tracked_overlay_on_C2_original
    Objects:Objects_edge_size_filtered
    Opacity:0.3

OverlayObjects:[module_num:24|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
    Input:C1_Enhanced_Corr
    Name the output image:Tracked_Objects_on_C1_Enhanced
    Objects:Objects_edge_size_filtered
    Opacity:0.3

OverlayObjects:[module_num:25|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
    Input:C3_Enhanced_Corr
    Name the output image:Tracked_objects_overlay_C3
    Objects:Objects_edge_size_filtered
    Opacity:0.3

OverlayObjects:[module_num:26|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
    Input:C4_Enhanced_Corr
    Name the output image:Tracked_objects_overlay_C4
    Objects:Objects_edge_size_filtered
    Opacity:0.3

SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:Tracked_Objects_on_C1
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Tracked_objects_on_C1_
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|C1_overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:28|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
    Select the type of image to save:Image
    Select the image to save:Tracked_overlay_on_C2_original
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Tracked_objects_overlay_C2_original_
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|C2_original_overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:29|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
    Select the type of image to save:Image
    Select the image to save:Tracked_objects_overlay_C2_Enhanced_Corr
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:tracked_objects_c2_enhanced_bg_corr_
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|tracked_objects_c2_enhanced_bg_corr
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:30|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
    Select the type of image to save:Image
    Select the image to save:Tracked_objects_overlay_C3
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Tracked_objects_overlay_C3_
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|C3_overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:31|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
    Select the type of image to save:Image
    Select the image to save:Tracked_objects_overlay_C4
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Tracked_objects_overlay_C4_
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|C4_overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:32|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
    Select the type of image to save:Image
    Select the image to save:TrackedCells
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Tracked_cells_
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|TrackedCells
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:33|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
    Select the type of image to save:Image
    Select the image to save:C2
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:C2_original_
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|C2_uncorrected
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:34|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
    Select the type of image to save:Image
    Select the image to save:C2_Corr
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:C2_corrected_
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|C2__bg_corrected
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:35|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
    Select the type of image to save:Image
    Select the image to save:C2_Enhanced_Corr
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:C2_Enhanced_Corr
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|C2_Enhanced_Corr
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:36|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
    Select the type of image to save:Image
    Select the image to save:C3_Enhanced_Corr
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:C3_Enhanced_Corr
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|C3_Enhanced_Corr
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:37|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
    Select the type of image to save:Image
    Select the image to save:C4_Enhanced_Corr
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:C4_Enhanced_Corr
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|C4_Enhanced_Corr
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:38|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
    Select the type of image to save:Image
    Select the image to save:C2_enhanced_bg_fun
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:C2_bg_function_
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|C2_bg_function
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:39|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|Data_Files
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Objects_edge_size_filtered|AreaShape_Zernike_3_1,Objects_edge_size_filtered|AreaShape_Zernike_3_3,Objects_edge_size_filtered|AreaShape_Zernike_8_8,Objects_edge_size_filtered|AreaShape_Zernike_8_4,Objects_edge_size_filtered|AreaShape_Zernike_8_6,Objects_edge_size_filtered|AreaShape_Zernike_8_2,Objects_edge_size_filtered|AreaShape_Zernike_8_0,Objects_edge_size_filtered|AreaShape_Zernike_6_2,Objects_edge_size_filtered|AreaShape_Zernike_6_0,Objects_edge_size_filtered|AreaShape_Zernike_6_4,Objects_edge_size_filtered|AreaShape_Zernike_6_6,Objects_edge_size_filtered|AreaShape_Zernike_9_1,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Stardist_Labels_Enhanced_Images
    Overwrite existing files without warning?:No
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